<?xml version="1.0" encoding="utf-8"?>
<Script>
<Context>Zen26</Context>
<Version>1.0</Version>
<Language>Python</Language>
<Text>

# *************** Recorded Code Block ***************
from System.IO import File, Directory, FileInfo, Path 
from System import Environment
import math

strPath = Environment.CurrentDirectory
max_z_slices = 300

#GUI WIndow
mainWindow = ZenWindow()
mainWindow.AddFolderBrowser("path1","Image Folder",strPath,"1","0")
mainWindow.AddFolderBrowser("path2","Output Folder",strPath,"2","0")
# mainWindow.AddCheckbox('useCompression', 'Save with compression', True)
wd = mainWindow.Show()

#  Load settings for Airyscan and SplitScenes

if wd.Contains("path1"):
    strPath   = str(wd.GetValue("path1"))
    filesL = Directory.GetFiles(strPath,"*.czi")
    OutPath   = str(wd.GetValue("path2"))
    # saveCompression = wd.GetValue("useCompression")
    Environment.CurrentDirectory = strPath

#Processing files: load image,  create subsets, airyscan process, split scenes, close

for i in range(0,filesL.Length): 
    file = filesL[i]
    fileInfo = FileInfo(file) 
    PathAndFile = strPath + "\\" + fileInfo.Name
    image = Zen.Application.LoadImage(PathAndFile,False)
    OrgFileNameWE = image.Name.Substring(0,image.Name.index('.czi'))
    #Zen.Application.Documents.Add(image)
    z = image.Bounds.SizeZ

    if z > max_z_slices:
        z_split_factor = math.ceil(z / max_z_slices)
        stack_range_subets = [None]*z_split_factor
    
    for i in range(len(stack_range_subets)):
        z_middle = z // z_split_factor
        if i == 0:
            stack_range_subets[i] = "Z("+str(1) + "-" + str( (i + 1) * z_middle) + ")"
        elif i == len(stack_range_subets):
            stack_range_subets[i] = "Z("+str(z) + "-" + str( (i) * z_middle) + ")"
        else:
            stack_range_subets[i] = "Z("+str((i + 1) * z_middle) + "-" + str( i * z_middle) + ")"

    z_middle = z//2
    z_overlap = math.ceil(z/10) # to get an overlap of 10% for stitching
    
    # to assure the overlap is bigger if dividing stack in half gives an odd number
    if z_overlap % 2 == 0:
        z_overlap_offset = z_overlap / 2
    else:
        z_overlap_offset = math.ceil(z_overlap / 2)
    
    z_sub1_upperbound = z_middle + z_overlap_offset
    z_sub2_lowerbound = z_middle - z_overlap_offset

    Stack = "Z(" + str(1) + "-" + str(z_sub1_upperbound) + ")"
    Stack2 = "Z(" + str(z+1) + "-" + str(z_sub2_lowerbound) + ")"

    image2 = Zen.Processing.Utilities.CreateSubset(image, Stack)
    
    Zen.Application.Documents.Add(image2)
    image2.Name=OrgFileNameWE + "_Sub1_"
    Zen.Processing.Utilities.SplitScenes(image2, OutPath, ZenCompressionMethod.None, False, False, False)
    image2.Close()

    image3 = Zen.Processing.Utilities.CreateSubset(image, Stack2)
    Zen.Application.Documents.Add(image3)
    image3.Name=OrgFileNameWE + "_Sub2_"
    Zen.Processing.Utilities.SplitScenes(image3, OutPath, ZenCompressionMethod.None, False, False, False)
    image3.Close()

    image4 = Zen.Processing.Utilities.CreateSubset(image, Stack3)
    Zen.Application.Documents.Add(image4)
    image4.Name=OrgFileNameWE + "_Sub3_"
    Zen.Processing.Utilities.SplitScenes(image4, OutPath, ZenCompressionMethod.None, False, False, False)
    image4.Close()
    image.Close()

</Text>
  <Author></Author>
  <Description></Description>
  <Keywords></Keywords>
  <Row>84</Row>
  <Column>17</Column>
</Script>